CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C2-")
    Name to assign these images:TUNEL
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Frame
    Metadata category:Frame

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:TUNEL
    Name the primary objects to be identified:Cell_death
    Typical diameter of objects, in pixel units (Min,Max):8,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:Yes
    Select maxima color:Blue
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:5
    Lower and upper bounds on threshold:0,1
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    Size of adaptive window:10
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
    Thresholding method:Robust Background

ExportToSpreadsheet:[module_num:6|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
